PsychoPy2experiment version="2022.2.5"
Settings
  Data filename = u'data/try.csv'
  Experiment info = {'Roll Number': '', 'Name': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = 1.0000, 1.0000, 1.0000
  expName = bandit task
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextComponent Optionq
      color = black
      letterHeight = 0.05
      pos = (-0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Q
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    TextComponent optionw
      letterHeight = 0.05
      pos = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = W
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    TextComponent optiono
      letterHeight = 0.05
      pos = (-0.25, -0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        O
    TextComponent Optionp
      letterHeight = 0.05
      pos = (0.25, -0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        P
    KeyboardComponent key_resp
      allowedKeys = 'q','w','o','p'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    CodeComponent code
      Code Type = Auto->JS
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      End Routine:
        if key_resp.keys=='q':
            prize=random.gauss(prize_lst[0][0],prize_lst[0][1])
            prize+=30 + (random.random() * (30))
            pos=0.4
            neg=0
            cross=0
        elif key_resp.keys=='w':
            prize=random.gauss(prize_lst[1][0],prize_lst[1][1])
            prize+=30 + (random.random() * (30))
            pos=0.4
            neg=0
            cross=0
        elif key_resp.keys=='o':
            prize=random.gauss(prize_lst[2][0],prize_lst[2][1])
            prize+=30 + (random.random() * (30))
            pos=0.4
            neg=0
            cross=0
        elif key_resp.keys=='p':
            prize=random.gauss(prize_lst[3][0],prize_lst[3][1])
            prize+=30 + (random.random() * (30))
            pos=0.4
            neg=0
            cross=0
        else:
            prize=100
            neg=0.4
            pos=0
            cross=1
        prize=max(prize,0)
        total=total-prize
    VariableComponent prize
      startExpValue = 0
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    VariableComponent cntrnd
      startExpValue = 0
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    ImageComponent Ql
      image = Q.jpg
      pos = (-0.25, 0.25)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent Wl
      image = W.jpg
      pos = (0.25, 0.255)
      size = (0.5, 0.51)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent Ol
      image = O.jpg
      pos = (-0.25, -0.25)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent Pl
      image = P.jpg
      pos = (0.25, -0.26)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine Welcomemessage_2
    TextComponent text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome!

        In this part of the task you are initially awarded 200000.
        You will have limited time (0.4s) to select an option (Q/W/O/P).
        Each option corresponds to a penalty which will be deducted from your initial award. Incase you fail to select an option before the timer runs out, a penalty amount will be deducted.

        Your goal is to maximize your final award by minimising the penalties.

        Press SPACE to begin
    KeyboardComponent enterresp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    VariableComponent rndtype
      startExpValue = 1
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    CodeComponent code_3
      Code Type = Auto->JS
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      Before Experiment:
        import random
        rndlist=[]
        prize_lst=[]
        pos=0
        neg=0
        cross=0

        for x in range(4):
            rndlist.append(1)
        for x in range(5):
            rndlist.append(2)
        for x in range(5):
            rndlist.append(3)
        for x in range(5):
            rndlist.append(4)
        random.shuffle(rndlist)
        rndlist.append(1)
        prize_lst=[(-10,10),(-10,100),(10,10),(10,100)]
      Begin Routine:
        total=10000
  Routine result
    ImageComponent clk
      image = clck.jpg
      opacity = 0.5
      pos = (0, 0.15)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = neg
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    ImageComponent sad
      image = sad.png
      opacity = 0.5
      pos = (0, 0.15)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = pos
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    TextComponent text_2
      color = black
      letterHeight = 0.08
      pos = (0, -0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.4
      text [set every repeat] = $'Loss -' + str(round(prize,0))
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    CodeComponent code_2
      Code Type = Auto->JS
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      End Routine:
        if(cntrnd==20):
            cntrnd=0
            rndtype=rndlist.pop()
            brk=1
            if(rndtype==1):#IGT
                prize_lst=[(-10,10), (-10,100), (10,10), (10,100)]
            if(rndtype==2):#equalmeans
                prize_lst=[ (0,10), (0,40), (0,70), (0,100)]
            if(rndtype==3):#lowvar
                prize_lst=[ (-10,10), (-0.3333,10), (0.3333,10), (10,10)]
            if(rndtype==4):#highvar
                prize_lst=[ (-10,100), (-0.3333,100), (0.3333,100), (10,100)]
            random.shuffle(prize_lst)
        else:
            cntrnd+=1
            brk=0
        cntbrk+=1
        if(cntbrk==100):
            brk=1
            cntbrk=0
        else:
            brk=0
  Routine Welcomemessage_1
    TextComponent uIntrotext
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome!

        In this part of the task you are initially awarded . You will have unlimited time to select an option (Q/W/O/P). Each option corresponds to a penalty which will be deducted from your initial award.

        Your goal is to maximize your final award by minimising the penalties.

        Press SPACE to begin
    KeyboardComponent uenter_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    VariableComponent urndtype
      startExpValue = 1
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    CodeComponent code_4
      Code Type = Auto->JS
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      Before Experiment:
        import random
        urndlist=[]
        uprize_lst=[]
        total=10000
        brk=0
        cntbrk=0
        ftotal=0
        for x in range(4):
            urndlist.append(1)
        for x in range(5):
            urndlist.append(2)
        for x in range(5):
            urndlist.append(3)
        for x in range(5):
            urndlist.append(4)
        random.shuffle(urndlist)
        urndlist.append(1)
        uprize_lst=[(-10,10),(-10,100),(10,10),(10,100)]
  Routine utrial
    KeyboardComponent ukey_resp
      allowedKeys = 'w','o','p','q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_5
      Code Type = Auto->JS
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      End Routine:
        if ukey_resp.keys=='q':
            uprize=random.gauss(uprize_lst[0][0],uprize_lst[0][1])
            uprize+=30 + (random.random() * (30))
        elif ukey_resp.keys=='w':
            uprize=random.gauss(uprize_lst[1][0],uprize_lst[1][1])
            uprize+=30 + (random.random() * (30))
        elif ukey_resp.keys=='o':
            uprize=random.gauss(uprize_lst[2][0],uprize_lst[2][1])
            uprize+=30 + (random.random() * (30))
        elif ukey_resp.keys=='p':
            uprize=random.gauss(uprize_lst[3][0],uprize_lst[3][1])
            uprize+=30 + (random.random() * (30))
        else:
            uprize=0
        uprize=max(uprize,0)
        total=total-uprize
    VariableComponent uprize
      startExpValue = 0
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    VariableComponent ucntrnd
      startExpValue = 0
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    ImageComponent Q
      image = Q.jpg
      pos = (-0.25, 0.25)
      size = (0.5,0.5)
      startVal [time (s)] = 0.0
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    ImageComponent W
      image = W.jpg
      pos = (0.25, 0.255)
      size = (0.5,0.51)
      startVal [time (s)] = 0.0
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    ImageComponent O
      image = O.jpg
      pos = (-0.25, -0.25)
      size = (0.5,0.5)
      startVal [time (s)] = 0.0
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    ImageComponent P
      image = P.jpg
      pos = (0.25, -0.26)
      size = (0.5,0.5)
      startVal [time (s)] = 0.0
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  Routine uresult
    ImageComponent sad1
      image = sad.png
      opacity = 0.5
      pos = (0, 0.15)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.4
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    TextComponent text_3
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.08
      pos = (0, -0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.4
      text [set every repeat] = $'Loss -' + str(round(uprize,0)) 
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    CodeComponent code_6
      Code Type = Auto->JS
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      End Routine:
        if(ucntrnd==20):
            ucntrnd=0
            urndtype=urndlist.pop()
            if(urndtype==1):#IGT
                uprize_lst=[(-10,10), (-10,100), (10,10), (10,100)]
            if(urndtype==2):#equalmeans
                uprize_lst=[ (0,10), (0,40), (0,70), (0,100)]
            if(urndtype==3):#lowvar
                uprize_lst=[ (-10,10), (-0.3333,10), (0.3333,10), (10,10)]
            if(urndtype==4):#highvar
                uprize_lst=[ (-10,100), (-0.3333,100), (0.3333,100), (10,100)]
            random.shuffle(uprize_lst)
        else:
            ucntrnd+=1
        cntbrk+=1
        if(cntbrk==100):
            brk=1
            cntbrk=0
        else:
            brk=0
  Routine Thankyou
    TextComponent text_4
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text [set every repeat]:
        $'Total Reward '+ str(round(ftotal,0))+'\n\nThank You for participating!'
  Routine WelcommeMessage3
    TextComponent newintrotext
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the given part of the task in this you will have unlimited time to select a option and we will show you the reward after it.After each trial you will be shown a single digit number that you have to remember. And after 20 trials we will ask you to enter that number in the order. And the award will be based on how much you can tell it to be correct.
        Press Space to begin
    KeyboardComponent newintroresp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    VariableComponent newrndtype
      startExpValue = 1
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    CodeComponent code_7
      Code Type = Auto->JS
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      Before Experiment:
        import random
        newprize=0
        newrndlist=[]
        newprize_lst=[]
        for x in range(3):
            rndlist.append(1)
        for x in range(4):
            rndlist.append(2)
        for x in range(4):
            rndlist.append(3)
        for x in range(4):
            rndlist.append(4)
        random.shuffle(rndlist)
        newprize_lst=[(-10,10),(-10,100),(10,10),(10,100)]
  Routine newTrial
    KeyboardComponent newkeyresp
      allowedKeys = 'w','o','p','q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_8
      Code Type = Auto->JS
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      End Routine:
        if newkeyresp.keys=='q':
            newprize=random.gauss(newprize_lst[0][0],newprize_lst[0][1])
            newprize+=30 + (random.random() * (30))
        elif newkeyresp.keys=='w':
            newprize=random.gauss(newprize_lst[1][0],newprize_lst[1][1])
            newprize+=30 + (random.random() * (30))
        elif newkeyresp.keys=='o':
            newprize=random.gauss(newprize_lst[2][0],newprize_lst[2][1])
            newprize+=30 + (random.random() * (30))
        elif newkeyresp.keys=='p':
            newrize=random.gauss(newprize_lst[3][0],newprize_lst[3][1])
            newprize+=30 + (random.random() * (30))
        else:
            newprize=0
        newprize=max(newprize,0)
    VariableComponent newprize
      startExpValue = 0
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    VariableComponent newcntrnd
      startExpValue = 0
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    ImageComponent nQ
      image = Q.jpg
      pos = (-0.25, 0.25)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent nW
      image = W.jpg
      pos = (0.25, 0.25)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent nO
      image = O.jpg
      pos = (-0.25, -0.25)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent nP
      image = P.jpg
      pos = (0.25, -0.25)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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  Routine newresult
    TextComponent text_5
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.4
      text [set every repeat] = $'Won ' + str(round(newprize,3))
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    CodeComponent code_9
      Code Type = Auto->JS
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      End Routine:
        if(newcntrnd==20):
            newcntrnd=0
            newcntrnd=newcntrnd.pop()
            if(newcntrnd==1):#IGT
                newprize_lst=[(-10,10), (-10,100), (10,10), (10,100)]
            if(newcntrnd==2):#equalmeans
                newprize_lst=[ (0,10), (0,40), (0,70), (0,100)]
            if(newcntrnd==3):#lowvar
                newprize_lst=[ (-10,10), (-0.3333,10), (0.3333,10), (10,10)]
            if(newcntrnd==4):#highvar
                newprize_lst=[ (-10,100), (-0.3333,100), (0.3333,100), (10,100)]
            random.shuffle(uprize_lst)
        else:
            newcntrnd+=1
  Routine remember
    CodeComponent code_10
      Code Type = Auto->JS
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      Begin Routine:
        txt=""
        for i in range(10):
            r1 = random.randint(0, 9)
            txt=txt+str(r1)
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent reme_t
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $'Remember this: ' + str(txt) + '\n Press Space To continue'
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    VariableComponent txt
      startExpValue = 0
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  Routine inpremem
    TextComponent text_6
      color = black
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      text = Enter the number you have seen:
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    CodeComponent code_12
      Code Type = Auto->JS
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      Begin Routine:
        textbox.text=""
    TextboxComponent textbox
      bold = False
      borderColor = 1.0000, 1.0000, 1.0000
      color = -1.0000, -1.0000, -1.0000
      editable = True
      fillColor = 0.6941, 0.4980, 0.6941
      letterHeight = 0.05
      pos = (0,-0.25)
      size = (None, None)
      startVal [time (s)] = 00
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    CodeComponent code_11
      Code Type = Auto->JS
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      End Routine:
        inp=textbox.text
        r=0
        for i in range(10):
            if(i>=len(inp)):
                break
            if(inp[i]!=txt[i]):
                break
            else:
                r=r+1
        newprize=newprize*(r/10)
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine buff
    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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  Routine break1
    TextComponent text_8
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text [set every repeat] = $'Your current balance is ' + str(round(total,0)) + '\n\nYou can now rest for 30s and you will again get 10000 \n \n Press SPACE to continue'
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    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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    CodeComponent code_13
      Code Type = Auto->JS
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      End Routine:
        ftotal+=total
        total=10000
  Routine break2
    TextComponent text_9
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text [set every repeat] = $'Your current balance is ' + str(round(total,0)) + '\n\nYou can now rest for 30s and you will again get 10000\n \n Press SPACE to continue'
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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    CodeComponent code_14
      Code Type = Auto->JS
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      End Routine:
        ftotal+=total
        total=10000
Flow
  Routine Welcomemessage_1
  LoopInitiator utrials loopType="TrialHandler"
    loopType = random
    nReps = 400
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    Routine utrial
    Routine uresult
    LoopInitiator trials_2 loopType="TrialHandler"
      loopType = random
      nReps = brk
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      Routine break1
    LoopTerminator trials_2
  LoopTerminator utrials
  Routine Welcomemessage_2
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 400
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    Routine trial
    Routine result
    LoopInitiator trials_3 loopType="TrialHandler"
      loopType = random
      nReps = brk
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      Routine break2
    LoopTerminator trials_3
  LoopTerminator trials
  Routine Thankyou
