PsychoPy2experiment version="2022.2.5"
Settings
  Data filename = u'data/try.csv'
  Experiment info = {'Roll Number': '', 'Name': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = 1.0000, 1.0000, 1.0000
  expName = bandit task
  keyboardBackend = ioHub
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Routines
  Routine Thankyou
    TextComponent text_4
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        $'Your Total reward is '+str(round(ftot,0))+'\n \n Thank You for participation'
  Routine WelcommeMessage3
    TextComponent newintrotext
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome!

        In this part of the task you will have unlimited time to selected an option (Q/W/O/P) based on which you will earn a reward.
        Before starting, a six digit number will be provided which will have to be recalled after 20 trials.
        Your rewards will then be scaled based on your accuracy in remembering the number.

        Your goal is to maximize your rewards.

        Press SPACE to begin
    KeyboardComponent newintroresp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    VariableComponent newrndtype
      startExpValue = 1
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    CodeComponent code_7
      Code Type = Auto->JS
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      Before Experiment:
        import random
        newprize=0
        isreq=1
        tot=0
        ftot=0
        isinpreq=0
        newrndlist=[]
        newprize_lst=[]
        for x in range(4):
            newrndlist.append(1)
        for x in range(5):
            newrndlist.append(2)
        for x in range(5):
            newrndlist.append(3)
        for x in range(5):
            newrndlist.append(4)
        newrndlist.append(1)
        random.shuffle(newrndlist)
        newprize_lst=[(-10,10),(-10,100),(10,10),(10,100)]
  Routine newTrial
    KeyboardComponent newkeyresp
      allowedKeys = 'w','o','p','q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_8
      Code Type = Auto->JS
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      End Routine:
        if newkeyresp.keys=='q':
            newprize=random.gauss(newprize_lst[0][0],newprize_lst[0][1])
            newprize+=30 + (random.random() * (30))
        elif newkeyresp.keys=='w':
            newprize=random.gauss(newprize_lst[1][0],newprize_lst[1][1])
            newprize+=30 + (random.random() * (30))
        elif newkeyresp.keys=='o':
            newprize=random.gauss(newprize_lst[2][0],newprize_lst[2][1])
            newprize+=30 + (random.random() * (30))
        elif newkeyresp.keys=='p':
            newrize=random.gauss(newprize_lst[3][0],newprize_lst[3][1])
            newprize+=30 + (random.random() * (30))
        else:
            newprize=0
        newprize=max(newprize,0)
    VariableComponent newprize
      startExpValue = 0
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    VariableComponent newcntrnd
      startExpValue = 0
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    ImageComponent nQ
      image = Q.jpg
      pos = (-0.25, 0.25)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent nW
      image = W.jpg
      pos = (0.25, 0.25)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent nO
      image = O.jpg
      pos = (-0.25, -0.25)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent nP
      image = P.jpg
      pos = (0.25, -0.25)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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  Routine newresult
    CodeComponent code_9
      Code Type = Auto->JS
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      End Routine:
        if(newcntrnd==20):
            newcntrnd=0
            newrnd=newrndlist.pop()
            if(newcntrnd==1):#IGT
                newprize_lst=[(-10,10), (-10,100), (10,10), (10,100)]
            if(newcntrnd==2):#equalmeans
                newprize_lst=[ (0,10), (0,40), (0,70), (0,100)]
            if(newcntrnd==3):#lowvar
                newprize_lst=[ (-10,10), (-0.3333,10), (0.3333,10), (10,10)]
            if(newcntrnd==4):#highvar
                newprize_lst=[ (-10,100), (-0.3333,100), (0.3333,100), (10,100)]
            random.shuffle(newprize_lst)
            isinpreq=0
            isreq=1
        else:
            if(newcntrnd==19):
                isinpreq=1
                isreq=0
            else:
                isinpreq=0
                isreq=0
            newcntrnd+=1
  Routine remember
    CodeComponent code_10
      Code Type = Auto->JS
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      Begin Routine:
        txt=""
        for i in range(6):
            r1 = random.randint(0, 9)
            txt=txt+str(r1)
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent reme_t
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $'Remember this: ' + str(txt) + '\n Press Space To continue'
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    VariableComponent txt
      startExpValue = 0
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  Routine inpremem
    TextComponent text_6
      color = black
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
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      text:
        Enter the number you remember
        &
        Press Space to Continue
    CodeComponent code_12
      Code Type = Auto->JS
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      Begin Routine:
        textbox.text=""
    TextboxComponent textbox
      bold = False
      borderColor = 1.0000, 1.0000, 1.0000
      color = -1.0000, -1.0000, -1.0000
      editable = True
      fillColor = 0.6941, 0.4980, 0.6941
      letterHeight = 0.05
      pos = (0,-0.15)
      size = (0.75, 0.15)
      startVal [time (s)] = 00
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    CodeComponent code_11
      Code Type = Auto->JS
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      End Routine:
        inp=textbox.text
        r=0
        for i in range(6):
            if(i>=len(inp)):
                break
            if(inp[i]!=txt[i]):
                continue
            else:
                r=r+1
        tot=tot*(r/10)
        ftot+=tot
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine buff
    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.01
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  Routine resulttemp
    CodeComponent code_2
      Code Type = Auto->JS
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      End Routine:
        tot=tot+newprize
    TextComponent text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.4
      text [set every repeat] = $'Won ' + str(round(newprize,0))
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  Routine showrew
    TextComponent text_2
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.4
      text [set every repeat] = $'Your total reward based on your performance till now is: ' + str(round(tot))  
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    CodeComponent code
      Code Type = Auto->JS
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      End Routine:
        tot=0
Flow
  Routine WelcommeMessage3
  LoopInitiator newtrials loopType="TrialHandler"
    loopType = random
    nReps = 400
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    LoopInitiator trials loopType="TrialHandler"
      loopType = random
      nReps = isreq
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      Routine remember
    LoopTerminator trials
    Routine newTrial
    Routine buff
    Routine resulttemp
    LoopInitiator trials_2 loopType="TrialHandler"
      loopType = random
      nReps = isinpreq
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      Routine inpremem
      Routine showrew
    LoopTerminator trials_2
    Routine newresult
  LoopTerminator newtrials
  Routine Thankyou
